// NDViewerXYExample.bsh
//
// Beanshell script for Micro-Manager that demonstrates using the NDViewer API
// to display images acquired at different XY stage positions.
//
// This script:
// 1. Snaps images at different XY locations (in a grid pattern)
// 2. Stores them in NDTiff format with row/column coordinates
// 3. Displays them in NDViewer at the appropriate XY locations (stitched view)
// 4. Allows interactive acquisition: right-click shows blue tile with
//    "Left click to acquire", left-click acquires the tile
//
// Navigation:
// - Right-click and drag to pan
// - Mouse wheel to zoom
// - Right-click on empty area to highlight tile for acquisition
// - Left-click on highlighted tile to acquire it

import java.io.File;
import java.util.HashMap;
import java.util.Set;
import java.util.HashSet;
import java.util.concurrent.Executors;
import java.util.concurrent.ExecutorService;
import java.lang.reflect.InvocationHandler;
import java.lang.reflect.Method;
import java.lang.reflect.Proxy;
import mmcorej.TaggedImage;
import mmcorej.org.json.JSONObject;
import org.micromanager.ndtiffstorage.NDTiffStorage;
import org.micromanager.ndtiffstorage.MultiresNDTiffAPI;
import org.micromanager.ndviewer.api.NDViewerAPI;
import org.micromanager.ndviewer.api.NDViewerAcqInterface;
import org.micromanager.ndviewer.api.NDViewerDataSource;
import org.micromanager.ndviewer.api.CanvasMouseListenerInterface;
import org.micromanager.ndviewer.api.OverlayerPlugin;
import org.micromanager.ndviewer.main.NDViewer;
import org.micromanager.ndviewer.overlay.Overlay;
import org.micromanager.ndviewer.overlay.Roi;
import org.micromanager.ndviewer.overlay.TextRoi;
import org.micromanager.acqj.main.AcqEngMetadata;
import java.awt.Point;
import java.awt.Color;
import java.awt.Font;
import java.awt.Graphics;
import java.awt.geom.Point2D;
import java.awt.event.MouseEvent;
import java.awt.event.MouseWheelEvent;
import javax.swing.SwingUtilities;

// ======================== USER SETTINGS ========================

// Initial grid size (2x2 = 4 images) - can be expanded interactively
int initialRows = 2;
int initialCols = 2;

// Stage movement step in microns (distance between tile centers)
// This should match your camera FOV for seamless tiling
double stepSizeUm = 100.0;  // Microns between positions

// Overlap in pixels (how much adjacent tiles overlap)
// Set to 0 for no overlap, or positive value for overlapping tiles
int overlapPixels = 0;

// Save directory (set to null for temporary storage)
String saveDir = null;  // Example: "C:\\temp\\NDViewerTest"
String acqName = "XYExplore_" + System.currentTimeMillis();

// ===============================================================

// Get core and XY stage info
mmc = mm.core();
String xyStage = mmc.getXYStageDevice();

if (xyStage == null || xyStage.isEmpty()) {
   mm.scripter().message("Error: No XY stage device configured.");
   return;
}

// Store starting position (will be the center of the grid)
double startX = mmc.getXPosition(xyStage);
double startY = mmc.getYPosition(xyStage);

// Get image dimensions
int imageWidth = (int) mmc.getImageWidth();
int imageHeight = (int) mmc.getImageHeight();
int bitDepth = (int) mmc.getImageBitDepth();
double pixelSizeUm = mmc.getPixelSizeUm();

if (pixelSizeUm <= 0) {
   mm.scripter().message("Warning: Pixel size not calibrated, using 1.0 um");
   pixelSizeUm = 1.0;
}

// Calculate tile size in pixels (accounting for overlap)
int tileWidth = imageWidth - overlapPixels;
int tileHeight = imageHeight - overlapPixels;

mm.scripter().message("Image size: " + imageWidth + " x " + imageHeight + " pixels");
mm.scripter().message("Tile step: " + tileWidth + " x " + tileHeight + " pixels");
mm.scripter().message("Pixel size: " + pixelSizeUm + " um");
mm.scripter().message("Starting position: X=" + startX + ", Y=" + startY);

// Create summary metadata
JSONObject summaryMetadata = new JSONObject();
summaryMetadata.put("Width", imageWidth);
summaryMetadata.put("Height", imageHeight);
summaryMetadata.put("PixelSize_um", pixelSizeUm);
summaryMetadata.put("BitDepth", bitDepth);
summaryMetadata.put("PixelType", bitDepth <= 8 ? "GRAY8" : "GRAY16");
summaryMetadata.put("GridPixelOverlapX", overlapPixels);
summaryMetadata.put("GridPixelOverlapY", overlapPixels);

// Create NDTiff storage
String storageDir;
if (saveDir != null) {
   storageDir = saveDir;
} else {
   File tempDir = File.createTempFile("ndviewer", "");
   tempDir.delete();
   tempDir.mkdir();
   storageDir = tempDir.getAbsolutePath();
}

mm.scripter().message("Creating NDTiff storage in: " + storageDir);
mm.scripter().message("Acquisition name: " + acqName);

// Clear any previous storage reference
unset("storage");
unset("storageRef");

storage = new NDTiffStorage(storageDir, acqName, summaryMetadata,
      overlapPixels, overlapPixels, true, null, 20, null, true);

mm.scripter().message("Storage created, checking existing axes: " + storage.getAxesSet());

// Track acquired tiles and state for interactive acquisition
// Use a HashMap to hold mutable state that can be accessed from inner classes
// Clear any existing state from previous runs
unset("mouseState");
mouseState = new HashMap();
acquiredTilesSet = new HashSet();  // Set of "row,col" strings
mouseState.put("acquiredTiles", acquiredTilesSet);
mouseState.put("highlightedTile", null);  // Point(row, col) of tile to highlight, or null
mm.scripter().message("Initialized mouseState, acquiredTiles size: " + acquiredTilesSet.size());

// Acquisition start time for metadata
startTime = System.currentTimeMillis();

// Store references for use in inner classes
unset("storageRef");
final MultiresNDTiffAPI storageRef = storage;

// ============== Helper function to acquire a tile ==============
acquireTile(row, col, viewerRef) {
   // Calculate stage position for this tile
   double targetX = startX + col * stepSizeUm;
   double targetY = startY + row * stepSizeUm;

   String tileKey = row + "," + col;
   HashSet tiles = (HashSet)mouseState.get("acquiredTiles");
   mm.scripter().message("acquireTile: key='" + tileKey + "', set=" + tiles + ", contains=" + tiles.contains(tileKey));

   // Also check if storage already has this tile
   HashMap checkAxes = new HashMap();
   checkAxes.put("row", Integer.valueOf(row));
   checkAxes.put("column", Integer.valueOf(col));
   boolean inStorage = storageRef.hasImage(checkAxes, 0);
   mm.scripter().message("acquireTile: in storage=" + inStorage);

   if (tiles.contains(tileKey)) {
      mm.scripter().message("Tile at row=" + row + ", col=" + col + " already acquired (in our set)");
      return;
   }
   if (inStorage) {
      mm.scripter().message("Tile at row=" + row + ", col=" + col + " already in storage, adding to set");
      tiles.add(tileKey);
      return;
   }

   mm.scripter().message("Acquiring tile at row=" + row + ", col=" + col +
         " (X=" + targetX + ", Y=" + targetY + ")");

   try {
      // Move stage
      mmc.setXYPosition(xyStage, targetX, targetY);
      mmc.waitForDevice(xyStage);
      Thread.sleep(100);  // Settling time

      // Get actual position
      double actualX = mmc.getXPosition(xyStage);
      double actualY = mmc.getYPosition(xyStage);

      // Snap image
      mmc.snapImage();
      TaggedImage taggedImg = mmc.getTaggedImage();

      // Add metadata
      JSONObject tags = taggedImg.tags;
      long elapsedTime = System.currentTimeMillis() - startTime;
      tags.put("ElapsedTime-ms", elapsedTime);
      tags.put("XPosition_um_Intended", targetX);
      tags.put("YPosition_um_Intended", targetY);
      tags.put("XPosition_um", actualX);
      tags.put("YPosition_um", actualY);
      tags.put("Width", imageWidth);
      tags.put("Height", imageHeight);
      tags.put("BitDepth", bitDepth);
      tags.put("PixelType", bitDepth <= 8 ? "GRAY8" : "GRAY16");

      // Create axes in metadata using AcqEngMetadata helper
      // This properly sets up the "Axes" JSON structure that NDTiffStorage expects
      AcqEngMetadata.createAxes(tags);
      AcqEngMetadata.setAxisPosition(tags, "row", Integer.valueOf(row));
      AcqEngMetadata.setAxisPosition(tags, "column", Integer.valueOf(col));

      // Get the axes HashMap from the metadata
      HashMap axes = AcqEngMetadata.getAxes(tags);

      // Store image with multi-resolution pyramid generation
      // putImageMultiRes creates the pyramid levels for proper zooming
      // It returns a Future that completes when all resolution levels are written
      java.util.concurrent.Future future = storageRef.putImageMultiRes(taggedImg.pix, tags, axes,
            false, bitDepth, imageHeight, imageWidth);

      // Wait for the multi-resolution pyramid to be fully written
      future.get();

      // Mark as acquired
      ((HashSet)mouseState.get("acquiredTiles")).add(tileKey);

      // Log the resolution levels after the image is stored
      int numResLevels = storageRef.getNumResLevels();

      // Check which resolution levels have the image
      String hasImageInfo = "hasImage: ";
      for (int resLevel = 0; resLevel < numResLevels; resLevel++) {
         boolean hasIt = storageRef.hasImage(axes, resLevel);
         hasImageInfo = hasImageInfo + "res" + resLevel + "=" + hasIt + " ";
      }

      // Notify viewer
      HashMap displayAxes = new HashMap();
      viewerRef.newImageArrived(displayAxes);

      mm.scripter().message("Acquired tile " + ((HashSet)mouseState.get("acquiredTiles")).size() +
            " at row=" + row + ", col=" + col + ", numResLevels=" + numResLevels + ", " + hasImageInfo);

   } catch (Exception e) {
      mm.scripter().message("Error acquiring tile: " + e.getMessage());
      mm.scripter().message("Exception class: " + e.getClass().getName());
      if (e.getCause() != null) {
         mm.scripter().message("Caused by: " + e.getCause().getMessage());
      }
      e.printStackTrace();
   }
}

// ============== Helper to convert display coords to tile indices ==============
getTileFromDisplayCoords(displayX, displayY, viewerRef) {
   // Get view offset and magnification
   Point2D.Double viewOffset = viewerRef.getViewOffset();
   double mag = viewerRef.getMagnification();

   mm.scripter().message("Coord calc: display(" + displayX + "," + displayY +
         "), viewOffset(" + viewOffset.x + "," + viewOffset.y +
         "), mag=" + mag);

   // Sanity check - if view offset is invalid (Integer.MIN_VALUE), use 0
   double vx = viewOffset.x;
   double vy = viewOffset.y;
   if (vx < -1e9 || vx > 1e9) {
      mm.scripter().message("WARNING: Invalid viewOffset.x, using 0");
      vx = 0;
   }
   if (vy < -1e9 || vy > 1e9) {
      mm.scripter().message("WARNING: Invalid viewOffset.y, using 0");
      vy = 0;
   }
   if (mag <= 0 || mag > 1000) {
      mm.scripter().message("WARNING: Invalid magnification, using 1.0");
      mag = 1.0;
   }

   // Convert display coordinates to full-resolution pixel coordinates
   double fullResX = vx + displayX / mag;
   double fullResY = vy + displayY / mag;

   // Convert to tile indices
   int col = (int) Math.floor(fullResX / tileWidth);
   int row = (int) Math.floor(fullResY / tileHeight);

   mm.scripter().message("  -> fullRes(" + fullResX + "," + fullResY +
         ") -> tile(" + row + "," + col + ")");

   return new Point(row, col);
}

// ============== Data Source ==============
dataSourceHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      String methodName = method.getName();

      if (methodName.equals("isFinished")) {
         // Data source is never "finished" for explore mode
         return Boolean.FALSE;
      }
      else if (methodName.equals("getBounds")) {
         return null;  // Unbounded for explore mode
      }
      else if (methodName.equals("getImageForDisplay")) {
         HashMap axes = (HashMap) args[0];
         int resolutionIndex = ((Integer) args[1]).intValue();
         double xOffset = ((Double) args[2]).doubleValue();
         double yOffset = ((Double) args[3]).doubleValue();
         int displayWidth = ((Integer) args[4]).intValue();
         int displayHeight = ((Integer) args[5]).intValue();

         // Debug: log the request
         int maxRes = storageRef.getNumResLevels() - 1;
         mm.scripter().message("getImageForDisplay: requesting res=" + resolutionIndex +
               " (max=" + maxRes + "), offset=(" + xOffset + ", " + yOffset + ")");

         Object result = storageRef.getDisplayImage(axes, resolutionIndex,
               (int) xOffset, (int) yOffset, displayWidth, displayHeight);

         if (result == null) {
            mm.scripter().message("  -> NO IMAGE RETURNED");
         } else {
            mm.scripter().message("  -> got image");
         }
         return result;
      }
      else if (methodName.equals("getImageKeys")) {
         Set result = new HashSet();
         for (Object axesObj : storageRef.getAxesSet()) {
            HashMap axes = new HashMap((HashMap) axesObj);
            axes.remove("row");
            axes.remove("column");
            result.add(axes);
         }
         return result;
      }
      else if (methodName.equals("getMaxResolutionIndex")) {
         return Integer.valueOf(storageRef.getNumResLevels() - 1);
      }
      else if (methodName.equals("increaseMaxResolutionLevel")) {
         int level = ((Integer) args[0]).intValue();
         storageRef.increaseMaxResolutionLevel(level);
         return null;
      }
      else if (methodName.equals("getDiskLocation")) {
         return storageRef.getDiskLocation();
      }
      else if (methodName.equals("close")) {
         storageRef.close();
         return null;
      }
      else if (methodName.equals("getImageBitDepth")) {
         HashMap axesPositions = (HashMap) args[0];
         try {
            return Integer.valueOf(storageRef.getEssentialImageMetadata(axesPositions).bitDepth);
         } catch (Exception e) {
            return Integer.valueOf(bitDepth);  // fallback to configured bit depth
         }
      }
      // Default returns for unhandled methods
      Class returnType = method.getReturnType();
      if (returnType == boolean.class || returnType == Boolean.class) {
         return Boolean.FALSE;
      }
      if (returnType == int.class || returnType == Integer.class) {
         return Integer.valueOf(0);
      }
      return null;
   }
};

NDViewerDataSource dataSource = (NDViewerDataSource) Proxy.newProxyInstance(
   NDViewerDataSource.class.getClassLoader(),
   new Class[] { NDViewerDataSource.class },
   dataSourceHandler
);

// ============== Acquisition Interface ==============
// Use HashMap for state to avoid Beanshell scoping issues in InvocationHandler
unset("acqState");
acqState = new HashMap();
acqState.put("finished", Boolean.FALSE);
acqState.put("paused", Boolean.FALSE);

acqInterfaceHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      String methodName = method.getName();
      if (methodName.equals("isFinished")) {
         Boolean result = (Boolean) acqState.get("finished");
         return result != null ? result : Boolean.FALSE;
      }
      else if (methodName.equals("abort")) {
         acqState.put("finished", Boolean.TRUE);
         return null;
      }
      else if (methodName.equals("setPaused")) {
         acqState.put("paused", (Boolean) args[0]);
         return null;
      }
      else if (methodName.equals("isPaused")) {
         Boolean result = (Boolean) acqState.get("paused");
         return result != null ? result : Boolean.FALSE;
      }
      else if (methodName.equals("waitForCompletion")) {
         return null;
      }
      // Default for any other method - return false for booleans
      if (method.getReturnType() == boolean.class || method.getReturnType() == Boolean.class) {
         return Boolean.FALSE;
      }
      return null;
   }
};

NDViewerAcqInterface acqInterface = (NDViewerAcqInterface) Proxy.newProxyInstance(
   NDViewerAcqInterface.class.getClassLoader(),
   new Class[] { NDViewerAcqInterface.class },
   acqInterfaceHandler
);

// ============== Metadata Functions ==============
timeMetadataHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      if (method.getName().equals("apply")) {
         JSONObject tags = (JSONObject) args[0];
         try {
            if (tags.has("ElapsedTime-ms")) {
               return Long.valueOf(tags.getLong("ElapsedTime-ms"));
            }
         } catch (Exception e) { }
         return Long.valueOf(0);
      }
      return null;
   }
};

java.util.function.Function timeMetadataFunction = (java.util.function.Function) Proxy.newProxyInstance(
   java.util.function.Function.class.getClassLoader(),
   new Class[] { java.util.function.Function.class },
   timeMetadataHandler
);

zMetadataHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      if (method.getName().equals("apply")) {
         JSONObject tags = (JSONObject) args[0];
         try {
            if (tags.has("ZPosition_um_Intended")) {
               return Double.valueOf(tags.getDouble("ZPosition_um_Intended"));
            }
         } catch (Exception e) { }
         return Double.valueOf(0.0);
      }
      return null;
   }
};

java.util.function.Function zMetadataFunction = (java.util.function.Function) Proxy.newProxyInstance(
   java.util.function.Function.class.getClassLoader(),
   new Class[] { java.util.function.Function.class },
   zMetadataHandler
);

// ============== Create NDViewer ==============
mm.scripter().message("Creating NDViewer...");
NDViewerAPI viewer = new NDViewer(dataSource, acqInterface, summaryMetadata,
      pixelSizeUm, false);
mm.scripter().message("NDViewer created, setting title...");
viewer.setWindowTitle("XY Explore - " + acqName + " (Right-click to select tile, Left-click to acquire)");

viewer.setReadTimeMetadataFunction(timeMetadataFunction);
viewer.setReadZMetadataFunction(zMetadataFunction);

// Store viewer reference for callbacks
unset("viewerRef");
final NDViewerAPI viewerRef = viewer;

// ============== Overlayer Plugin for tile highlighting ==============
overlayerHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      if (method.getName().equals("drawOverlay")) {
         Overlay overlay = (Overlay) args[0];
         Point2D.Double displayImageSize = (Point2D.Double) args[1];
         double downsampleFactor = ((Double) args[2]).doubleValue();
         Graphics g = (Graphics) args[3];
         HashMap axes = (HashMap) args[4];
         double magnification = ((Double) args[5]).doubleValue();
         Point2D.Double viewOffset = (Point2D.Double) args[6];

         // Debug: always log when drawOverlay is called
         Object ht = mouseState.get("highlightedTile");

         // Draw highlighted tile if any
         if (ht != null) {
            int row = ((Point)ht).x;
            int col = ((Point)ht).y;
            String tileKey = row + "," + col;
            mm.scripter().message("Overlay: drawing highlight for row=" + row + ", col=" + col +
                  ", mag=" + magnification + ", viewOffset=(" + viewOffset.x + "," + viewOffset.y + ")");

            // Only show if not already acquired
            if (!((HashSet)mouseState.get("acquiredTiles")).contains(tileKey)) {
               // Calculate tile position in full resolution coordinates
               double tilePixelX = col * tileWidth;
               double tilePixelY = row * tileHeight;

               // Convert to DISPLAY/SCREEN coordinates
               // ROIs in NDViewer are drawn in screen coordinates (after the image transform)
               int dispX = (int) ((tilePixelX - viewOffset.x) * magnification);
               int dispY = (int) ((tilePixelY - viewOffset.y) * magnification);
               int dispW = (int) (tileWidth * magnification);
               int dispH = (int) (tileHeight * magnification);

               mm.scripter().message("  tile pixel pos: (" + tilePixelX + "," + tilePixelY +
                     ") -> display pos: (" + dispX + "," + dispY + "), size: " + dispW + "x" + dispH);

               // Create a rectangle ROI at the tile position (DISPLAY coordinates)
               Roi rectRoi = new Roi(dispX, dispY, dispW, dispH);
               rectRoi.setStrokeColor(new Color(0, 100, 255));
               rectRoi.setStrokeWidth(3);
               rectRoi.setFillColor(new Color(0, 100, 255, 100));
               overlay.add(rectRoi);

               // Add text ROI for instructions (centered in tile)
               String text = "Left-click to acquire";
               int textX = dispX + dispW / 4;  // Offset from left edge
               int textY = dispY + dispH / 2;
               TextRoi textRoi = new TextRoi(textX, textY, text);
               textRoi.setStrokeColor(Color.WHITE);
               overlay.add(textRoi);

               // Add text ROI for coordinates
               String coordText = "Row: " + row + ", Col: " + col;
               TextRoi coordRoi = new TextRoi(textX, textY + 20, coordText);
               coordRoi.setStrokeColor(Color.YELLOW);
               overlay.add(coordRoi);
            }
         }

         // Pass overlay to viewer - this is what makes the overlay persistent!
         viewerRef.setOverlay(overlay);
         return null;
      }
      return null;
   }
};

OverlayerPlugin overlayer = (OverlayerPlugin) Proxy.newProxyInstance(
   OverlayerPlugin.class.getClassLoader(),
   new Class[] { OverlayerPlugin.class },
   overlayerHandler
);

viewer.setOverlayerPlugin(overlayer);

// ============== Mouse Listener ==============
unset("ZOOM_FACTOR");
final double ZOOM_FACTOR = 1.4;

// Initialize mouse drag state in mouseState HashMap
mouseState.put("dragStart", null);
mouseState.put("isDragging", Boolean.FALSE);

mouseListenerHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      String methodName = method.getName();

      if (methodName.equals("mousePressed")) {
         MouseEvent e = (MouseEvent) args[0];
         if (SwingUtilities.isRightMouseButton(e)) {
            mouseState.put("dragStart", e.getPoint());
            mouseState.put("isDragging", Boolean.FALSE);
         }
         return null;
      }
      else if (methodName.equals("mouseReleased")) {
         MouseEvent e = (MouseEvent) args[0];
         boolean isDragging = mouseState.get("isDragging") != null &&
                              ((Boolean)mouseState.get("isDragging")).booleanValue();

         if (SwingUtilities.isRightMouseButton(e) && !isDragging) {
            // Right-click without drag - highlight tile for acquisition
            Point tile = getTileFromDisplayCoords(e.getX(), e.getY(), viewerRef);
            String tileKey = tile.x + "," + tile.y;

            mm.scripter().message("Right-click at tile row=" + tile.x + ", col=" + tile.y +
                  ", acquired=" + ((HashSet)mouseState.get("acquiredTiles")).contains(tileKey));

            if (!((HashSet)mouseState.get("acquiredTiles")).contains(tileKey)) {
               mouseState.put("highlightedTile", tile);
               mm.scripter().message("Highlighting tile, calling redrawOverlay...");
               viewerRef.redrawOverlay();
            }
         }
         else if (SwingUtilities.isLeftMouseButton(e)) {
            // Left-click - acquire highlighted tile if any
            if (mouseState.get("highlightedTile") != null) {
               // Capture values before clearing
               int rowToAcquire = ((Point)mouseState.get("highlightedTile")).x;
               int colToAcquire = ((Point)mouseState.get("highlightedTile")).y;
               mouseState.put("highlightedTile", null);  // Clear highlight

               mm.scripter().message("Left-click: acquiring tile row=" + rowToAcquire + ", col=" + colToAcquire);

               // Store coordinates for background execution
               mouseState.put("pendingRow", Integer.valueOf(rowToAcquire));
               mouseState.put("pendingCol", Integer.valueOf(colToAcquire));
               mouseState.put("pendingAcquire", Boolean.TRUE);
            } else {
               mm.scripter().message("Left-click: no tile highlighted");
            }
         }

         mouseState.put("dragStart", null);
         mouseState.put("isDragging", Boolean.FALSE);
         return null;
      }
      else if (methodName.equals("mouseDragged")) {
         MouseEvent e = (MouseEvent) args[0];
         Point dragStart = (Point) mouseState.get("dragStart");
         if (dragStart != null && SwingUtilities.isRightMouseButton(e)) {
            Point current = e.getPoint();
            int dx = dragStart.x - current.x;
            int dy = dragStart.y - current.y;

            // Only consider it dragging if moved more than a few pixels
            if (Math.abs(dx) > 3 || Math.abs(dy) > 3) {
               mouseState.put("isDragging", Boolean.TRUE);
               mouseState.put("highlightedTile", null);  // Clear highlight when dragging
            }

            boolean isDragging = ((Boolean)mouseState.get("isDragging")).booleanValue();
            if (isDragging) {
               viewerRef.pan(dx, dy);
               mouseState.put("dragStart", current);
            }
         }
         return null;
      }
      else if (methodName.equals("mouseWheelMoved")) {
         MouseWheelEvent e = (MouseWheelEvent) args[0];
         Point mouseLoc = e.getPoint();
         if (e.getWheelRotation() < 0) {
            viewerRef.zoom(1.0 / ZOOM_FACTOR, mouseLoc);
         } else if (e.getWheelRotation() > 0) {
            viewerRef.zoom(ZOOM_FACTOR, mouseLoc);
         }
         return null;
      }
      else if (methodName.equals("mouseMoved")) {
         // Could use this to show hover effect
         return null;
      }
      return null;
   }
};

CanvasMouseListenerInterface mouseListener = (CanvasMouseListenerInterface) Proxy.newProxyInstance(
   CanvasMouseListenerInterface.class.getClassLoader(),
   new Class[] { CanvasMouseListenerInterface.class },
   mouseListenerHandler
);

viewer.setCustomCanvasMouseListener(mouseListener);
mm.scripter().message("Mouse listener set");

// Fix canvas background
javax.swing.JPanel canvasPanel = viewer.getCanvasJPanel();
canvasPanel.setOpaque(true);
canvasPanel.setBackground(java.awt.Color.BLACK);

// ============== Acquire initial grid ==============
try {
   mm.scripter().message("Acquiring initial " + initialRows + "x" + initialCols + " grid...");
   mm.scripter().message("Tile dimensions: " + tileWidth + " x " + tileHeight + " pixels");

   // First, set view to origin (0,0) to ensure valid starting state
   viewer.setViewOffset(0, 0);
   mm.scripter().message("Initial view offset set to (0, 0)");

   // Small delay to let viewer initialize
   Thread.sleep(500);

   // Acquire tiles starting at (0,0) for simplicity
   // The starting stage position corresponds to tile (0,0)
   for (int r = 0; r < initialRows; r++) {
      for (int c = 0; c < initialCols; c++) {
         mm.scripter().message("About to acquire tile r=" + r + ", c=" + c);
         acquireTile(r, c, viewer);
      }
   }

   // Return to starting position
   mmc.setXYPosition(xyStage, startX, startY);
   mmc.waitForDevice(xyStage);

   // Log current view state
   mm.scripter().message("Current magnification: " + viewer.getMagnification());
   Point2D.Double currentOffset = viewer.getViewOffset();
   mm.scripter().message("Current view offset: (" + currentOffset.x + ", " + currentOffset.y + ")");
} catch (Exception e) {
   mm.scripter().message("ERROR during initial acquisition: " + e.getMessage());
   e.printStackTrace();
}

mm.scripter().message("");
mm.scripter().message("=== Interactive Explore Mode ===");
mm.scripter().message("Initial grid acquired: " + ((HashSet)mouseState.get("acquiredTiles")).size() + " tiles");
mm.scripter().message("");
mm.scripter().message("Controls:");
mm.scripter().message("  - Right-click + drag: Pan the view");
mm.scripter().message("  - Mouse wheel: Zoom in/out");
mm.scripter().message("  - Right-click (no drag): Select tile to acquire (turns blue)");
mm.scripter().message("  - Left-click: Acquire the selected tile");
mm.scripter().message("");
mm.scripter().message("Data stored at: " + storage.getDiskLocation());

// ============== Background acquisition thread ==============
// This thread polls for pending acquisition requests from the mouse listener
// (We can't create anonymous Thread classes inside InvocationHandler in Beanshell)

// Create a Runnable using Proxy pattern
acqRunnableHandler = new InvocationHandler() {
   public Object invoke(Object proxy, Method method, Object[] args) throws Throwable {
      if (method.getName().equals("run")) {
         while (!((Boolean)acqState.get("finished")).booleanValue()) {
            try {
               // Check if there's a pending acquisition
               if (mouseState.get("pendingAcquire") != null &&
                   ((Boolean)mouseState.get("pendingAcquire")).booleanValue()) {

                  int row = ((Integer)mouseState.get("pendingRow")).intValue();
                  int col = ((Integer)mouseState.get("pendingCol")).intValue();
                  mouseState.put("pendingAcquire", Boolean.FALSE);

                  mm.scripter().message("Background thread: acquiring tile row=" + row + ", col=" + col);
                  acquireTile(row, col, viewerRef);
                  viewerRef.redrawOverlay();
               }
               Thread.sleep(100);  // Poll every 100ms
            } catch (InterruptedException ie) {
               break;
            } catch (Exception e) {
               mm.scripter().message("Background acquisition error: " + e.getMessage());
               e.printStackTrace();
            }
         }
         mm.scripter().message("Background acquisition thread stopped");
      }
      return null;
   }
};

Runnable acqRunnable = (Runnable) Proxy.newProxyInstance(
   Runnable.class.getClassLoader(),
   new Class[] { Runnable.class },
   acqRunnableHandler
);

// Start the background thread
backgroundThread = new Thread(acqRunnable, "AcquisitionThread");
backgroundThread.start();
mm.scripter().message("Background acquisition thread started");
